PsychoPy2experiment version="2022.2.5"
Settings
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['trials.csv']
  Save log file = False
  Save wide csv file = False
  Screen = 1
  Show info dlg = False
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = datapipe
  exportHTML = on Save
  keyboardBackend = ioHub
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Routines
  Routine trial
    TextComponent target
      color [set every repeat] = $color
      letterHeight = 0.05
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 5
      text [set every repeat] = $word
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    KeyboardComponent response
      allowedKeys = 'r','g','b'
      correctAns = $correctAnswer
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      store = first key
      storeCorrect = True
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    TextComponent fixation
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.25
      text = +
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  Routine savedatapipe
    CodeComponent code
      Code Type = JS
      Begin JS Routine:
        function randomID(){
          const length = 10;
          let result = "";
          const chars = "0123456789abcdefghjklmnopqrstuvwxyz";
          for (let i = 0; i < length; i++) {
            result += chars[Math.floor(Math.random() * chars.length)];
          }
          return result;
         }

        let dataJSON = JSON.stringify(psychoJS.experiment._trialsData);

        fetch("https://pipe.jspsych.org/api/data/", {
          method: "POST",
          headers: {
            "Content-Type": "application/json",
            Accept: "*/*",
          },
          body: JSON.stringify({
            experimentID: "UrcWKSKRveTl",
            filename: `${randomID()}.json`,
            data: dataJSON,
          }),
        });
  Routine startinstructions
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        This is a demo experiment for PsychoPy and DataPipe.

        It is a basic Stroop task. Press the key that matches the color of the word. Use R for red, G for green, and B for blue.

        There are 9 trials, and then the data will save to the OSF.

        Press spacebar to begin.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine startinstructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = trials.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('word', 'red'), ('color', 'red'), ('congruent', 1), ('correctAnswer', 'r')]),
      OrderedDict([('word', 'red'), ('color', 'green'), ('congruent', 0), ('correctAnswer', 'g')]),
      OrderedDict([('word', 'red'), ('color', 'blue'), ('congruent', 0), ('correctAnswer', 'b')]),
      OrderedDict([('word', 'green'), ('color', 'red'), ('congruent', 0), ('correctAnswer', 'r')]),
      OrderedDict([('word', 'green'), ('color', 'green'), ('congruent', 1), ('correctAnswer', 'g')]),
      OrderedDict([('word', 'green'), ('color', 'blue'), ('congruent', 0), ('correctAnswer', 'b')]),
      OrderedDict([('word', 'blue'), ('color', 'red'), ('congruent', 0), ('correctAnswer', 'r')]),
      OrderedDict([('word', 'blue'), ('color', 'green'), ('congruent', 0), ('correctAnswer', 'g')]),
      OrderedDict([('word', 'blue'), ('color', 'blue'), ('congruent', 1), ('correctAnswer', 'b')])]
    Routine trial
  LoopTerminator trials
  Routine savedatapipe
